PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Disgust Thang
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine encoding
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $image_disgust
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = 'Absolute Disgust', 'Slight Disgust', 'Neutral', 'Like it', 'Really Like'
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 8
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine distractor
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $math_q
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent buton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.2, 0.09)
      startVal [time (s)] = 0
      text = submit
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  Routine testing
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pol_ques
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      labels = "Strongly Agree", "Agree", "Neutral", "Disagree", "Strongly Disagree"
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine Introduction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please indicate how much you agree with each of the following statements, or how true it is about you. Please choose a number (0-4) to indicate your answer. 0 being strongly disagree to 4 being strongly agree
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = I understand
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  Routine instruction
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please indicate how much you agree with each of the following statements, or how true it is about you. Please choose from strongly agree to strongly disagree
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    ButtonComponent Button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = I understand
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  Routine exit_message
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating in this experiment. Your data and your identity will be kept confidential. For the final outcome of this experiment send an email about your interest to ashish.c1@ahduni.edu.in
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  Routine dsr_a
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $dsr1
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 1
      labels = 'Strongly Disagree', 'Mildly Disagree', 'Neutral', 'Midly Agree', 'Strongly Agree'
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4)
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  Routine dsr_b
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    TextComponent text_8
      letterHeight = 0.02
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        How disgusting would you find each of the following experiences? Please write a  number (0-4) to indicate your answer
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $dsr_e
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    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 1
      labels = 'Not Disgusting', 'Slightly Disgusting', 'Moderately Disgusting', 'Very Disgusting', 'Extremly disgusting'
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4)
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  Routine consent_form
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    TextComponent text_10
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = This is a study on cognitive activity. You are free to exit the experiment at any time if you no longer wish to participate in the experiment. Your personal details will be kept confidential and not be disclosed in the research. If you would like to receive your performance data post the experiment, please email the researcher at ashish.c1@ahduni.edu.in. By pressing the below button, you consent to participating in the experiment.
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = I agree
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Flow
  Routine consent_form
  Routine Introduction
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = dsr_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'dsr1_no': '1r', 'dsr1': 'I might be willing to try eating monkey meat, under some circumstances'},
      {'dsr1_no': 2, 'dsr1': 'It would bother me to be in a science class, and to see a human hand preserved in a jar'},
      {'dsr1_no': 3, 'dsr1': 'It bothers me to hear someone clear a throat full of mucous'},
      {'dsr1_no': 4, 'dsr1': 'I never let any part of my body touch the toilet seat in public restrooms. '},
      {'dsr1_no': 5, 'dsr1': 'I would go out of my way to avoid walking through a graveyard. '},
      {'dsr1_no': '6r', 'dsr1': "Seeing a cockroach in someone else's house doesn't bother me. "},
      {'dsr1_no': 7, 'dsr1': 'It would bother me tremendously to touch a dead body. '},
      {'dsr1_no': 8, 'dsr1': 'If I see someone vomit, it makes me sick to my stomach. '},
      {'dsr1_no': 9, 'dsr1': 'I probably would not go to my favorite restaurant if I found out that the cook had a cold. '},
      {'dsr1_no': '10r', 'dsr1': 'It would not upset me at all to watch a person with a glass eye take the eye \nout of the socket.  '},
      {'dsr1_no': 11, 'dsr1': 'It would bother me to see a rat run across my path in a park. '},
      {'dsr1_no': '12d', 'dsr1': 'I would rather eat a piece of fruit than a piece of paper '},
      {'dsr1_no': 13, 'dsr1': 'Even if I was hungry, I would not drink a bowl of my favorite soup if it had been\nstirred by a used but thoroughly washed flyswatter. '},
      {'dsr1_no': 14, 'dsr1': 'It would bother me to sleep in a nice hotel room if I knew that a man had died of a\nheart attack in that room the night before. '}]
    Routine dsr_a
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = dsr_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'dsr2_no': 15, 'dsr_e': 'You see maggots on a piece of meat in an outdoor garbage pail. '},
      {'dsr2_no': '16d', 'dsr_e': 'You see a person eating an apple with a knife and fork'},
      {'dsr2_no': 17, 'dsr_e': 'While you are walking through a tunnel under a railroad track, you smell urine. '},
      {'dsr2_no': 18, 'dsr_e': 'You take a sip of soda, and then realize that you drank from the glass that an\n \t\tacquaintance of yours had been drinking from'},
      {'dsr2_no': 19, 'dsr_e': "Your friend's pet cat dies, and you have to pick up the dead body with your bare hands.  "},
      {'dsr2_no': 20, 'dsr_e': 'You see someone put ketchup on vanilla ice cream, and eat it. '},
      {'dsr2_no': 21, 'dsr_e': 'You see a man with his intestines exposed after an accident. '},
      {'dsr2_no': 22, 'dsr_e': 'You discover that a friend of yours changes underwear only once a week. '},
      {'dsr2_no': 23, 'dsr_e': 'A friend offers you a piece of chocolate shaped like dog doo. '},
      {'dsr2_no': 24, 'dsr_e': 'You accidentally touch the ashes of a person who has been cremated. '},
      {'dsr2_no': 25, 'dsr_e': 'You are about to drink a glass of milk when you smell that it is spoiled. '},
      {'dsr2_no': 26, 'dsr_e': 'As part of a sex education class, you are required to inflate a new unlubricated\n\t\tcondom, using your mouth. '},
      {'dsr2_no': 27, 'dsr_e': 'You are walking barefoot on concrete, and you step on an earthworm. '}]
    Routine dsr_b
  LoopTerminator trials_5
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = math_question.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'math_q': '15-7', 'correct_resp': 8},
      {'math_q': '5*7', 'correct_resp': 35},
      {'math_q': '42/7', 'correct_resp': 6},
      {'math_q': '51-17', 'correct_resp': 34},
      {'math_q': '19*8', 'correct_resp': 152},
      {'math_q': '6* (25+3)', 'correct_resp': 168}]
    Routine distractor
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = D_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_disgust': 'images/1033_food.png'},
      {'image_disgust': 'images/1034_food.png'},
      {'image_disgust': 'images/1110_body products.png'},
      {'image_disgust': 'images/1118_body products.png'},
      {'image_disgust': 'images/1171_injuries_infections.png'},
      {'image_disgust': 'images/1182_injuries_infections.png'},
      {'image_disgust': 'images/1201_death.png'},
      {'image_disgust': 'images/1218_death.png'},
      {'image_disgust': 'images/1253_hygiene.png'}]
    Routine encoding
  LoopTerminator trials
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = political ques.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'no': '1R', 'pol_ques': 'The government should pass a Constitutional amendment that would make it illegal to discriminate against anyone in any situation based on sexual orientation.'},
      {'no': '2R', 'pol_ques': 'The national government should establish a centrally funded medical program so that all persons, regardless of means, have access to medical care.'},
      {'no': 3, 'pol_ques': 'It should be legal and constitutional to say a prayer at the beginning of assemblies in public schools.'},
      {'no': '4R', 'pol_ques': 'Persons should be allowed to join and serve in the military regardless of their sexual preference as long as their behavior meets strict military standards.'},
      {'no': '5R', 'pol_ques': 'A person should be able to use and grow small quantities of marijuana in the privacy of his or her own home with no legal consequences.'},
      {'no': 6, 'pol_ques': 'Persons receiving the death penalty should be limited in their number of appeals, and the death sentence should be carried out in a shorter time period than it is now.'},
      {'no': 7, 'pol_ques': 'The government should reverse its decision on abortion and make it more challenging to have an abortion except in special cases such as rape and incest. '},
      {'no': 8, 'pol_ques': 'India should require one year of military service for all able-bodied people.'},
      {'no': 9, 'pol_ques': 'Parents should be able to send their children to any school they choose, and tax money should be used to support the schools that parents choose.'},
      {'no': 10, 'pol_ques': 'Police should be able to confiscate any materials that are deemed to be obscene or pornographic. '},
      {'no': 11, 'pol_ques': 'The central government should be required to have a balanced budget that does not spend more than the money that comes in from taxes'},
      {'no': '12R', 'pol_ques': '\xa0Laws that limit the sale of fireworks and other explosive materials that are not intended for legitimate cultural or religious purposes should be passed.'},
      {'no': '13R', 'pol_ques': 'Sex education should be in taught all public schools and all students should be required to take the class unless exempted by parents. '},
      {'no': 14, 'pol_ques': 'Reservation system should be abolished in India. '},
      {'no': 15, 'pol_ques': 'The Prime Minister, without permission from the President, should be able to use the armed forces and call for an emergency in possible combat areas for as long as he/she deems necessary. '},
      {'no': '16R', 'pol_ques': 'Laws should be passed to make it legal for public employees such as police, firemen, teachers, and garbage collectors to go on strike. '},
      {'no': 17, 'pol_ques': "Public schools should be required to teach the world's creation as written in the Bhagavad Gita in all classes that teach evolution theory."},
      {'no': 18, 'pol_ques': 'The government should mandate family planning counseling and reversible sterilization for low-income, unmarried women with three or more children. '},
      {'no': '19R', 'pol_ques': 'Birth control information, non-prescription contraceptive devices, and the morning-after pill should be made available on college campuses.'},
      {'no': 20, 'pol_ques': 'Evidence gathered by the police, even if an honest mistake was made in getting a warrant, should be used to help prosecute suspected criminals. '},
      {'no': 21, 'pol_ques': 'Inter-religious marriages should be abolished.'},
      {'no': '22R', 'pol_ques': 'Requirements for any military duty, including combat, should be based on physical, emotional, and intellectual abilities, not gender or sexual orientation.'},
      {'no': '23R', 'pol_ques': 'The law should make private employers hire minorities if they are qualified because they have been victims of discrimination in the past. '},
      {'no': 24, 'pol_ques': 'Certain literature should be banned from city libraries if the librarian feels it is improper or too controversial.'},
      {'no': '25R', 'pol_ques': 'The government should interfere during conversion from one religion to another.'},
      {'no': '26R', 'pol_ques': 'The government should spend less on the military and more on education and the environment.'},
      {'no': '27R', 'pol_ques': 'India should not trade with or help any nation that violates human rights.'},
      {'no': 28, 'pol_ques': 'People planning to get married should have a mandatory test for STDs such as AIDS and gonorrhea before a marriage certificate can be issued. '},
      {'no': 29, 'pol_ques': 'There are too many lawsuits in the courts, and the courts do not have the time to deal with more severe issues. '},
      {'no': '30R', 'pol_ques': 'Nuclear power and nuclear-generating stations should be banned. '},
      {'no': '31R', 'pol_ques': 'The death penalty is clearly a form of cruel and unusual punishment and should be banned. '},
      {'no': '32R', 'pol_ques': 'Sexual harassment of women in the workplace is a serious problem and should be prosecuted under law'},
      {'no': '33R', 'pol_ques': 'The primary function of prisons should be to rehabilitate criminals, not to punish them. '},
      {'no': '34R', 'pol_ques': 'The states should abolish criminal penalties for victimless crimes such as gambling and prostitution. '},
      {'no': 35, 'pol_ques': 'The CBI should be able to wiretap the phones and read the mail of suspected individuals.'},
      {'no': '36R', 'pol_ques': 'The central government must take strong steps to reverse global warming, even if it means losing some jobs. '},
      {'no': 37, 'pol_ques': 'Most youth who fall under the reservation scheme today are lazy and do not want to work.'},
      {'no': 38, 'pol_ques': 'Profanity and sexually oriented material on television should be stopped or penalized by the government. '},
      {'no': 39, 'pol_ques': 'The government must stop the flow of immigrants, both legal and illegal, from Bangladesh.'},
      {'no': '40R', 'pol_ques': 'There should be sensitization classes for individuals in the LGBTQ+ community in school.'}]
    Routine testing
  LoopTerminator trials_2
  Routine exit_message
